PsychoPy2experiment version="2023.2.3"
Settings
  Completed URL = $'https://adelphiderner.qualtrics.com/jfe/form/SV_2bF7lXuTQzoEIGq?PROLIFIC_PID=' + expInfo['participant'] 
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'],expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Show mouse = True
  Units = norm
  Use version = 2022.2.1
  Window size (pixels) = [1512, 982]
  color = -1.0000, -1.0000, -1.0000
  expName = RejectionTask_OneLoop
  keyboardBackend = PsychToolbox
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Routines
  Routine Welcome_Screen
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    TextComponent Welcome
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Instagram Sharing Task!


        Today you will have the opportunity to share some of your Instagram photos with other participants and receive feedback.



        Press space to continue.
    KeyboardComponent endwelcomescreen_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent spreadsheets
      Code Type = Auto->JS
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      Begin Experiment:
        partnermatch = ''
        partneravatar = ''
        trialset = range(0,5)
      Begin Routine:
        import pandas as pd

        subid = expInfo['participant']
        expdir = os.getcwd()
        subjdir = '%s/Participant_Images/%s' % (expdir, subid)
        trial_sheet = '%s/%s_trials.csv' %(subjdir,subid)
        wtp_sheet = '%s/%s_WTP.xlsx' %(subjdir, subid)

        #wtp_sheet = pd.read_csv('%s/%s_WTP.csv' %(subjdir, subid), encoding = 'unicode_escape')
        partnermatch = ''
        partneravatar = ''
  Routine First_Instructions
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    TextComponent FirstInstructions
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        To begin, you will be assigned a partner at random by the computer. Next, your instagram photos will be shared with your partner. After each photo is shared, your partner will give you feedback on whether they liked or disliked your photo. You will have the chance to share your photos with 3 different partners during todays task.


        You may be eligible throughout the task to participate in a lottery, which you may play yourself or have the computer play on your behalf. Further instructions about this task will be provided should you be eligible to participate.


        Press space to continue.
    KeyboardComponent endinstructionscreen_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Player_Match
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    TextComponent PlayerMatch
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Feedback_Positive
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    TextComponent PositiveFeedback
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Charlie liked your photo!
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    ImageComponent positiveinstagram
      image = Images/like and dislike.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Negative_Feedback
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    TextComponent Feedback_Negative
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Charlie did not like your photo.
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    ImageComponent image_2
      image = Images/thumbs down emoji.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Positive_Feedback
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Sam liked your photo!
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    ImageComponent image_4
      image = Images/like and dislike.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Negative_Feedback_2
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Sam did not like your photo.
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    ImageComponent image_5
      image = Images/thumbs down emoji.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Cross
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    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Feedback
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    TextComponent response
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $Feedback
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    ImageComponent image_6
      image = $Stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Block2_WaitingMatch2
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    TextComponent secondparnter
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now be matched with a new partner.
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    TextComponent syncing2
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
      text = Syncing…
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    PolygonComponent polygon_2
      fillColor = none
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
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    TextComponent loading_25
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
      text = 25%
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    PolygonComponent loading_1
      fillColor = white
      pos = (-0.375, 0)
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
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    TextComponent loading_50
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 5.50
      stopVal [duration (s)] = 1.25
      text = 50%
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    PolygonComponent loading_2
      fillColor = white
      pos = (-.25, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 5.50
      stopVal [duration (s)] = 1.25
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    TextComponent loading_75
      letterHeight = 0.08
      pos = (0,-0.2)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
      text = 75%
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    PolygonComponent loading_3
      fillColor = white
      pos = (-.125, 0)
      shape = rectangle
      size = (0.75, 0.1)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
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    TextComponent loading_100
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
      text = 100%
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    PolygonComponent loading_full
      fillColor = white
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
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  Routine Block2_Match
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    ImageComponent nerdface
      image = Images/nerd emoji.jpeg
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Sam
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        You matched with Sam!








        Press space to continue.
  Routine Block2_Photo
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    ImageComponent image_3
      image = Images/Image_One.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent text
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = This photo will now be shared with Sam. Please wait for feedback.
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  Routine Block2_Waitingforfeedback
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    TextComponent text_6
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Waiting…
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  Routine Block2_Fixation
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to share your next photo.
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Block2_choice
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    TextComponent choice
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        You will now have the option to play a lottery game!




        Would you like to play or have the computer play on your behalf?
    TextComponent block2computer
      letterHeight = 0.04
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.0
      text = Computer
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    TextComponent self_2
      letterHeight = 0.1
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      text = self
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    KeyboardComponent key_resp_7
      allowedKeys = 'c','m',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        block2response_msg = ' '
        block2feedback_msg = ' '
        block2computer_choice = ['lower','higher']
      Each Frame:
        import random
        random_entry = random.choice(block2computer_choice)
  Routine Block2_Lotterycomputerchoice
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    TextComponent instruction
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = The computer will select whether it believes the card will be higher or lower than 7.
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    TextComponent computerresponse2
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text = $block2response_msg
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        block2response_msg = (f'The computer has chosen {random_entry}.')
        if key_resp_7.keys == 'm':
            continueRoutine = False
    ImageComponent card
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine Block2_Lotteryselfchoice
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    TextComponent instructionsforselfchoice2
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Please select whether you believe the card will be higher or lower than 5.
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    TextComponent block2_higherchoice
      letterHeight = 0.1
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Higher
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    TextComponent block2_lowerchoice
      letterHeight = 0.1
      pos = (-.3, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Lower
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    KeyboardComponent key_resp_8
      allowedKeys = 'h','l'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent block2_responsefeedback
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $block2feedback_msg
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_7.keys == 'c':
            continueRoutine = False
      Each Frame:
        if key_resp_8.keys == 'l':
            block2feedback_msg = (f'You have chosen lower.')
        elif key_resp_8.keys == 'h':
            block2feedback_msg = (f'You have chosen higher.')
        else:
            block2feedback_msg = (f'No response recorded.')
        block2responsefeedback.setText(feedback_msg)
        print(key_resp_5.keys)
        print(feedback_msg)
    ImageComponent block2_cardimage
      disabled = True
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine Block3_waitingtomatch
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    TextComponent block3_match
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now be matched with a new partner.
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    TextComponent syncing3
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
      text = Syncing…
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    PolygonComponent polygon3
      fillColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
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    TextComponent loading25
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
      text = 25%
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    PolygonComponent block3loading1
      fillColor = white
      pos = (-0.375, 0)
      shape = triangle
      size = (0.25, 0.1)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
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    TextComponent loading50
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.25
      text = 50%
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    PolygonComponent block3loading2
      fillColor = white
      pos = (-.25, 0)
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.25
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    TextComponent loading75
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
      text = 75%
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    PolygonComponent blockloading3
      fillColor = white
      pos = (-.125, 0)
      shape = rectangle
      size = (0.75, 0.1)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
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    TextComponent loading100
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
      text = 100%
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    PolygonComponent block3loadingfull
      fillColor = white
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
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  Routine Block3_Match
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    TextComponent block3match
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have matched with Riley!







        Press space to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent image_8
      image = Images/sillyemoji.webp
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Block3_Photo
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    ImageComponent image_9
      image = Images/Image_One.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_9
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = This photo will now be shared with Riley. Please wait for feedback.
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  Routine Block3_Waitingforfeedback
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    TextComponent text_10
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Waiting…
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  Routine Block3_feedback
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every frame] = $Response
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    ImageComponent image_10
      image [set every frame] = $Graphic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Block3_Fixation
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press space to share your next photo.
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Block3_Choice
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        block3response_msg = ' '
        block3feedback_msg = ' '
        block3computer_choice = ['lower','higher']
      Each Frame:
        import random
        random_entry = random.choice(block3computer_choice)
    KeyboardComponent key_resp_13
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent block3_choice
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You will now have the option to play a lottery game!




        Would you like to play or have the computer play on your behalf?
    TextComponent block3_computer
      letterHeight = 0.04
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Computer
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    TextComponent block3_self
      letterHeight = 0.04
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Self
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  Routine Block3_lotterycomputerchoice
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        response_msg = (f'The computer has chosen {random_entry}.')
        if key_resp_13.keys == 'm':
            continueRoutine = False
    TextComponent Block3_lotcomputerchoice
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = The computer will select whether it believes the card will be higher or lower than 3.
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    TextComponent Block3_computerresponse
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text = $block3response_msg
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    ImageComponent block3_cardimage
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine Block3_lotteryselfchoice
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    TextComponent block3_lotteryintstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Please select whether you believe the card will be higher or lower than 5.
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    TextComponent block3_higher
      letterHeight = 0.05
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Higher
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    TextComponent block3_lower
      letterHeight = 0.05
      pos = (-.3, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = Lower
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    KeyboardComponent key_resp_14
      allowedKeys = 'h','l'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    ImageComponent image_12
      image = Images/facedown card.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent block3_feedbackresponse
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text = $block3response_msg
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp_13.keys == 'c':
            continueRoutine = False
      Each Frame:
        if key_resp_14.keys == 'l':
            block3feedback_msg = (f'You have chosen lower.')
        elif key_resp_14.keys == 'h':
            block3feedback_msg = (f'You have chosen higher.')
        else:
            block3feedback_msg = (f'No response recorded.')
        block3responsefeedback.setText(feedback_msg)
        print(key_resp_5.keys)
        print(feedback_msg)
  Routine Block2_Feedback
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    TextComponent text_14
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $Response
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    ImageComponent image_11
      image [set every frame] = $Graphic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine WaitingToMatch
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    CodeComponent showloadingbar
      Code Type = Auto->JS
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      Begin Routine:
        if TrialNumber not in [1, 31, 61]: # establishes two blocks per 32 trials
            continueRoutine = False # if not trial 31 or 63, skip routine completely
    TextComponent Match_text
      letterHeight = 0.08
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You will now be matched with a game partner selected at random by the computer.
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    TextComponent syncing_text
      letterHeight = 0.12
      pos = (0, 0.3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
      text = Syncing…
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    TextComponent text_0
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.25
      text = 0%
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    PolygonComponent Transparent
      fillColor = 0.0000, 0.0000, 0.0000
      lineWidth = 1.2
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 6.25
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    PolygonComponent Loading_25
      fillColor = white
      pos = (-0.375, 0)
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
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    TextComponent text_25
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 4.25
      stopVal [duration (s)] = 1.25
      text = 25%
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    PolygonComponent Loading_50
      fillColor = white
      pos = (-0.25, 0)
      shape = rectangle
      size = (.5, 0.1)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.25
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    TextComponent text_50
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 1.25
      text = 50%
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    PolygonComponent Loading_75
      fillColor = white
      pos = (-.125, 0)
      shape = rectangle
      size = (0.75, 0.1)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
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    TextComponent text_75
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 6.75
      stopVal [duration (s)] = 1.25
      text = 75%
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    PolygonComponent Loading_100
      fillColor = white
      shape = rectangle
      size = (1, 0.1)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
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    TextComponent text_100
      letterHeight = 0.1
      pos = (0, -.2)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.25
      text = 100%
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  Routine Partner_Match
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    CodeComponent showpartnermatch
      Code Type = Auto->JS
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      Begin Routine:
        if TrialNumber not in [1, 31, 61]: # establishes two blocks per 32 trials
            continueRoutine = False # if not trial 31 or 63, skip routine completely
    TextComponent Youhavematched
      letterHeight = 0.08
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $partnermatch
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    ImageComponent partneremoji_image
      image [set every repeat] = $partneravatar
      size = (0.5, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent endpartnermatch_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent PressToContinue
      letterHeight = 0.08
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text = Press space to continue.
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  Routine Photo_Share
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    TextComponent photobeingshared_text
      letterHeight = 0.09
      pos = (0.0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = This photo is now being shared
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    TextComponent waitforfeedback_text
      letterHeight = 0.09
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Please wait for feedback.
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    CodeComponent initiatefeedbackresponses
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackresponses = ''
        fdbkimage = ''
      End Routine:
        feedbackresponses = (f'{Partner} {Feedback} your photo')
        if Feedback == 'liked':
            fdbkimage ='Images/thumbsup.png'
        elif Feedback == 'did not like':
            fdbkimage ='Images/thumbsdown.png'
    ImageComponent participantimage_image
      image [set every repeat] = $Photos
      size = (0.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine Waitingforfeedback
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    TextComponent waiting_text
      letterHeight = 0.15
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Waiting…
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  Routine Lotterycomputerchoice
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    CodeComponent skipcomputerchoice_code
      Code Type = Auto->JS
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      Begin Routine:
        #if choice_keys == 's':
            #continueRoutine = False
        #else:
            #continueRoutine = True
        response_msg = (f'The computer has chosen {random_entry}.')
    TextComponent lotterycard
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = The computer will select whether it believes the card will be higher or lower than 5.
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    ImageComponent Block1_facedowncard
      image = Images/facedown card.png
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent computerresponse
      letterHeight = 0.1
      pos = (0, -0.4)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 4
      text [set every repeat] = $response_msg
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  Routine Lotteryselfchoice
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    TextComponent higher_text
      letterHeight = 0.1
      pos = (0.3, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Higher
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    TextComponent lower_text
      letterHeight = 0.1
      pos = (-.3, -.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Lower
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    KeyboardComponent lotteryguess_keys
      allowedKeys [set every repeat] = 'h','l'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      store = first key
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    CodeComponent displaylotterychoice_code
      Code Type = Auto->JS
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      Each Frame:
        if lotteryguess_keys.keys == 'l':
            feedback_msg = (f'You have chosen lower.')
        elif lotteryguess_keys.keys == 'h':
            feedback_msg = (f'You have chosen higher.')
        else:
            feedback_msg = (f'No response recorded.')

        responsefeedback.setText(feedback_msg)
    TextComponent responsefeedback
      letterHeight = 0.07
      pos = (0, -0.59)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 4
      text [set every repeat] = $feedback_msg
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    ImageComponent block1_cardimage
      image = Images/facedown card.png
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine Continue
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        resumetext = ''
      Begin Routine:
        if TrialNumber%30 == 0: # needs to be set to 30 for actual run of task
            continueRoutine = False # if not trial 31 or 61, or 91 skip routine completely
        #if comprunOrNot ==0 and selfrunOrNot == 0:
        #    resumetext = 'You missed an opportunity to play the lottery. \n\n\n Please respond withtin 3 seconds on your next opportunity. \n\nPress space to continue.'
        #else:
        resumetext = 'Press space to resume sharing your photos.'
    KeyboardComponent Resume_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Resume_Text
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text [set every repeat] = $resumetext
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  Routine Conditionselection
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    CodeComponent code_13
      Code Type = Auto->JS
      disabled = True
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blockcounter
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    CodeComponent code_14
      Code Type = Auto->JS
  Routine test
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    TextComponent showconditionselected_test
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $condition_selected
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    TextComponent showpartnerselected_text
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = $partner_selected
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    KeyboardComponent continuefromshowingconditions_keys
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    TextComponent displayfeedback_text
      letterHeight = .12
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $feedbackresponses
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    ImageComponent fdbkimage_image
      image [set every repeat] = $fdbkimage
      size = (0.75, 1.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent initiatelottery_code
      Code Type = Auto->JS
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      Begin Experiment:
        WTPlottery = ''
      Begin Routine:
        if TrialNumber%5 == 0: # lottery should only appear every 5 trials and not on trial 0
            startWTP = 1
        else:
            startWTP = 0
  Routine feedbacklist
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    TextComponent text_17
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $feedback
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    CodeComponent code_11
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if choiceloop.nReps==1:
            block = 0
        else:
            block = 5
  Routine feedbackcounter
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    CodeComponent counter
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        if choiceloop.nReps==1:
            block = 0
        else:
            block = 5
  Routine partner_code
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    CodeComponent partnermatchcode
      Code Type = Auto->JS
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      Begin Experiment:
        partnermatch = ''
        partneravatar = ''
      End Routine:
        partnermatch = (f'You have matched with: {Partner}')
        if Partner == 'Sam':
            partneravatar='Images/nerdemoji_nobackground.png'
        elif Partner == 'Riley':
            partneravatar='Images/sunglassemoji_nobackground.png'
        elif Partner == 'Charlie':
            partneravatar='Images/smilingemoji.png'
        elif Partner == 'Alex':
            partneravatar='Images/cowboyemoji.png'
        elif Partner == 'Taylor':
            partneravatar='Images/huggingemoji.png'
  Routine continuesharing
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    TextComponent presstosharenextphoto_text
      letterHeight = .09
      startVal [time (s)] = 0.0
      text = Press space to share your next photo.
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    KeyboardComponent sharenextphoto_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent hidecontinuesharingroutine_code
      Code Type = Auto->JS
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      Begin Routine:
        if startWTP == 1:
            continueRoutine = False
        else:
            continueRoutine = True
      End Routine:
        trialset = [i+5 for i in trialset]
  Routine SalienceRating
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    CodeComponent saliencyrating_code
      Code Type = Auto->JS
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      Before Experiment:
        saliencerating = ''
        salienceratingtext=''
        rating_forsalience = ''
      Begin Experiment:
        salience_slider = visual.Slider(win=win, name='slider',
            startValue=999, size=(1.0, 0.1), pos=(0, -0.4), units=None,
            labels=(1, 2, 3, 4, 5), ticks=(1, 2, 3, 4, 5), granularity=0.0,
            style='rating', styleTweaks=('labels45', 'triangleMarker'), opacity=None,
            labelColor='white', markerColor='cornflowerblue', lineColor='white', colorSpace='rgb',
            font='Open Sans', labelHeight=0.05,
            flip=False, ori=0.0, depth=-5, readOnly=False)
      Begin Routine:
        if not TrialNumber%30 == 0: # establishes two blocks per 32 trials
            continueRoutine = False # if not trial 31 or 63, skip routine completely
        salienceratingtext = (f'How likely are you to share photos with {Partner} in the future? \n\n Use your left and right arrows to move the arrow to your desired rating.' )
        event.clearEvents('keyboard')
        salience_slider.markerPos = 3
      Each Frame:
        salience_slider.draw()
        keys = event.getKeys()
        displayrating_text.setText(round(salience_slider.getMarkerPos(),1))
        if len(keys):
            if 'left' in keys:
                salience_slider.markerPos = salience_slider.markerPos - .1
                rating_forsalience = salience_slider.getRating()
                displayrating_text.setText(round(salience_slider.getMarkerPos(),1))
            elif 'right' in keys:
                salience_slider.markerPos = salience_slider.markerPos + .1
                rating_forsalience = salience_slider.getRating()
                displayrating_text.setText(round(salience_slider.getMarkerPos(),1))
      End Routine:
        #saliencerating = salience_slider.getRating()
        entiretaskloop.addData('salience_rating', round(salience_slider.getMarkerPos(),1))
    TextComponent saliencequestion_text
      letterHeight = 0.06
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $salienceratingtext
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent salienceavatar_image
      image [set every repeat] = $partneravatar
      size = (0.3, 0.55)
      startVal [time (s)] = 0.0
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    TextComponent saliencecontinue_text
      letterHeight = 0.07
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press space to enter rating and continue.
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    TextComponent displayrating_text
      letterHeight = 0.065
      pos = (0, -0.65)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_forsalience
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    CodeComponent code_2
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        if len(keys):
            if 'left' in keys:
                salience_slider.markerPos = salience_slider.markerPos - .1
                rating = salience_slider.getRating()
                displayrating_text.setText(rating)
                print(rating)
            elif 'right' in keys:
                salience_slider.markerPos = salience_slider.markerPos + .1
                rating = salience_slider.getRating()
                displayrating_text.setText(rating)
                print(rating)
  Routine StressLevel
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    CodeComponent stresslevelslider
      Code Type = Auto->JS
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      Before Experiment:
        stresslevel = ''
        stressleveltext = ''
        rating_forstress = ''
      Begin Experiment:
        stress_slider = visual.Slider(win=win, name='slider',
            startValue=999, size=(1.0, 0.1), pos=(0, -0.4), units=None,
            labels=(1, 2, 3, 4, 5, 6, 7, 8, 9), ticks=(1, 2, 3, 4, 5, 6, 7, 8, 9), granularity=0.0,
            style='rating', styleTweaks=('labels45', 'triangleMarker'), opacity=None,
            labelColor='white', markerColor='cornflowerblue', lineColor='white', colorSpace='rgb',
            font='Open Sans', labelHeight=0.05,
            flip=False, ori=0.0, depth=-5, readOnly=False)
      Begin Routine:
        if not TrialNumber%30 == 0: # establishes two blocks per 32 trials
            continueRoutine = False # if not trial 31 or 63, skip routine completely
        stressleveltext = (f'Please rate your current stress level. \n\n\n Use your mouse or left and right arrows to move the arrow to your desired rating.' )
        event.clearEvents('keyboard')
        stress_slider.markerPos = 5
      Each Frame:
        stress_slider.draw()
        keys = event.getKeys()
        displaystressrating_text.setText(round(stress_slider.getMarkerPos(),1))
        if len(keys):
            if 'left' in keys:
                stress_slider.markerPos = stress_slider.markerPos - .1
                rating_forstress = stress_slider.getRating()
                displayrating_text.setText(round(stress_slider.getMarkerPos(),1))
            elif 'right' in keys:
                stress_slider.markerPos = stress_slider.markerPos + .1
                rating_forstress = stress_slider.getRating()
                displayrating_text.setText(round(stress_slider.getMarkerPos(),1))
      End Routine:
        stresslevel = stress_slider.getRating()
        entiretaskloop.addData('stress_level', round(stress_slider.getMarkerPos(),1))
    TextComponent stresslevel_text
      letterHeight = 0.08
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stressleveltext
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    KeyboardComponent stresslevel_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent displaystressrating_text
      letterHeight = 0.08
      pos = (0, -0.65)
      startVal [time (s)] = 0.0
      text [set every repeat] = $rating_forstress
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  Routine WTP_Instructions1
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    TextComponent WTP_ins_text1
      letterHeight = .07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        In this part of the task, you will be choosing between two options.

        Please indicate which option you would prefer by using your keyboard to press '1' for the choice on the left, or '2' for the choice on the right.

        Each option is associated with a price, which will be subtracted from your earnings from the previous task upon making a selection.

        Press SPACE to continue.
    KeyboardComponent WTP_ins_keys1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WTP_Instructions2
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    TextComponent WTP_ins_text2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Imagine yourself actually doing the experiences shown on screen before making your decision.

        You will have ten seconds to make a response after seeing the choices.

        When you make your choice, your selection will turn green.

        Press SPACE to start the task.
    KeyboardComponent WTP_ins_keys2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WTPTask
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    TextComponent Left_Experience
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Left_Exp
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    TextComponent Right_Experience
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $Right_Exp
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    TextComponent Left_Price
      letterHeight = 0.05
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $leftmoney
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    TextComponent Right_Price
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $rightmoney
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    KeyboardComponent responses
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      store = first key
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    TextComponent blank
      disabled = True
      letterHeight = 0.05
      startVal [condition] = responses.status== STARTED
      stopVal [duration (s)] = 2
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    CodeComponent responses_code
      Code Type = Auto->JS
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      Each Frame:
        if responses.keys == '1':
           Left_Experience.setColor('green')
        elif responses.keys =='2':
           Right_Experience.setColor('green')
      End Routine:
        Left_Experience.setColor('white')
        Right_Experience.setColor('white')
        continueRoutine= False
  Routine ITI
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    TextComponent ITI_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
      text [set every repeat] = +
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Flow
  Routine Welcome_Screen
  Routine First_Instructions
  LoopInitiator entiretaskloop loopType="TrialHandler"
    conditionsFile = $trial_sheet
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialNumber', 1), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_24.jpg'), ('Feedback', 'did not like')]),
      OrderedDict([('TrialNumber', 2), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_26.jpg'), ('Feedback', 'liked')]),
      OrderedDict([('TrialNumber', 3), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_6.jpg'), ('Feedback', 'did not like')]),
      OrderedDict([('TrialNumber', 4), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_2.jpg'), ('Feedback', 'did not like')]),
      OrderedDict([('TrialNumber', 5), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_27.jpg'), ('Feedback', 'did not like')]),
      OrderedDict([('TrialNumber', 6), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_22.jpg'), ('Feedback', 'did not like')]),
      OrderedDict([('TrialNumber', 7), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_20.jpg'), ('Feedback', 'liked')]),
      OrderedDict([('TrialNumber', 8), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_13.jpg'), ('Feedback', 'did not like')]),
      OrderedDict([('TrialNumber', 9), ('Partner', 'Sam'), ('Condition', 'Rej'), ('Photos', 'Participant_Images/101_Image_16.jpg'), ('Feedback', 'did not like')])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
    Routine partner_code
    Routine WaitingToMatch
    Routine Partner_Match
    Routine Photo_Share
    Routine Waitingforfeedback
    Routine feedback
    Routine continuesharing
    LoopInitiator startWTPloop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = startWTP
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      Routine WTP_Instructions1
      Routine WTP_Instructions2
      LoopInitiator WTPTaskLoop loopType="TrialHandler"
        Selected rows = $trialset
        conditionsFile = $wtp_sheet
        loopType = sequential
        nReps = 1
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        Routine WTPTask
        Routine ITI
      LoopTerminator WTPTaskLoop
      Routine Continue
    LoopTerminator startWTPloop
    Routine SalienceRating
    Routine StressLevel
  LoopTerminator entiretaskloop
